PsychoPy2experiment version="2021.2.0"
Settings
  Data filename = '../data/%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '0000', 'session': '01', 'posture': "['sitting', 'standing']"}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  color = black
  expName = stroop
  logging level = warning
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $text
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    KeyboardComponent resp
      allowedKeys = 'z', 'm'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Take a small break before continuing.

        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        z for red LETTERS
        m for green LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instructPractice
    TextComponent instr1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please press;
        z for red LETTERS
        m for green LETTERS
        (Esc will quit)

        Let's start with a few practice trials

        Press any key to continue
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        This is the end of the experiment.

        Thanks!
  Routine feedback_trial
    CodeComponent message
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
        sound_hz=60
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="."
          sound_hz=60
        else:
          msg="."
          sound_hz=440
    TextComponent feedback_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = $msg
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    SoundComponent sound_2
      sound = $sound_hz
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine feedback_practice
    CodeComponent message_2
      Code Type = Py
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
        sound_hz=60
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
          sound_hz=60
        else:
          msg="Oops! That was wrong"
          sound_hz=440
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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    SoundComponent sound_1
      sound = $sound_hz
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine break_1
    TextComponent breakText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        We will now take a 10 second break,

        or press a key when ready to continue.
    KeyboardComponent ready2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      store = nothing
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Flow
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = stroop-replication-trialtypes.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'text': 'XXX', 'letterColor': 'red', 'correctAnswer': 'z', 'congruent': 'neutral'},
      {'text': 'XXX', 'letterColor': 'green', 'correctAnswer': 'm', 'congruent': 'neutral'},
      {'text': 'XXXXX', 'letterColor': 'red', 'correctAnswer': 'z', 'congruent': 'neutral'},
      {'text': 'XXXXX', 'letterColor': 'green', 'correctAnswer': 'm', 'congruent': 'neutral'},
      {'text': 'green', 'letterColor': 'red', 'correctAnswer': 'z', 'congruent': 'incongruent'},
      {'text': 'red', 'letterColor': 'green', 'correctAnswer': 'm', 'congruent': 'incongruent'},
      {'text': 'green', 'letterColor': 'red', 'correctAnswer': 'z', 'congruent': 'incongruent'},
      {'text': 'red', 'letterColor': 'green', 'correctAnswer': 'm', 'congruent': 'incongruent'},
      {'text': 'red', 'letterColor': 'red', 'correctAnswer': 'z', 'congruent': 'congruent'},
      {'text': 'green', 'letterColor': 'green', 'correctAnswer': 'm', 'congruent': 'congruent'},
      {'text': 'red', 'letterColor': 'red', 'correctAnswer': 'z', 'congruent': 'congruent'},
      {'text': 'green', 'letterColor': 'green', 'correctAnswer': 'm', 'congruent': 'congruent'},
      {'text': 'XXX', 'letterColor': 'red', 'correctAnswer': 'z', 'congruent': 'neutral'},
      {'text': 'XXX', 'letterColor': 'green', 'correctAnswer': 'm', 'congruent': 'neutral'},
      {'text': 'XXXXX', 'letterColor': 'red', 'correctAnswer': 'z', 'congruent': 'neutral'},
      {'text': 'XXXXX', 'letterColor': 'green', 'correctAnswer': 'm', 'congruent': 'neutral'},
      {'text': 'green', 'letterColor': 'red', 'correctAnswer': 'z', 'congruent': 'incongruent'}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
    Routine trial
    Routine feedback_practice
  LoopTerminator practice
  LoopInitiator trial_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine instruct
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stroop-replication-trialtypes.xlsx
      endPoints = [1, 2]
      loopType = random
      nReps = 1
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      conditions:
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      Routine trial
      Routine feedback_trial
    LoopTerminator trials
  LoopTerminator trial_loop
  Routine thanks
